CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20120210174759

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):test_prediction.tif
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:prediction
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):test_volume
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:image
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    Channel number:1
    Rescale intensities?:Yes

EnhanceEdges:[module_num:2|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
    Select the input image:prediction
    Name the output image:LoGPrediction
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:3.0
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
ImageMath:[module_num:3|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:RidgedPrediction
    Image or measurement?:Image
    :LoGPrediction
    :1
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    Image or measurement?:Image
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    :1
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
ApplyThreshold:[module_num:4|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
    Select the input image:RidgedPrediction
    Name the output image:BinaryPrediction
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Morph:[module_num:5|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
    Select the input image:BinaryPrediction
    Name the output image:DistanceTransformPrediction
    Select the operation to perform:fill small holes
    Number of times to repeat operation:Once
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    Scale:3
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3

Smooth:[module_num:6|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
    Select the input image:DistanceTransformPrediction
    Name the output image:SmoothedDistanceTransform
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:8.0
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
Morph:[module_num:7|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
    Select the input image:SmoothedDistanceTransform
    Name the output image:DilatedPrediction
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:8.0

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:-500.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvLocalPredictionMaxima
    Image or measurement?:Image
    :SmoothedDistanceTransform
    :1
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    Image or measurement?:Image
    :DilatedPrediction
    :1
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LocalPredictionMaxima
    Image or measurement?:Image
    :InvLocalPredictionMaxima
    :1
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    Image or measurement?:Image
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    :1
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
ApplyThreshold:[module_num:10|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
    Select the input image:LocalPredictionMaxima
    Name the output image:LocalMaximaBinary
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.4999
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:LocalMaximaBinary
    Name the primary objects to be identified:LocalMaxima
    Typical diameter of objects, in pixel units (Min,Max):4,10
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Binary image
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Select binary image:LocalMaximaBinary
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:LocalMaxima
    Name the objects to be identified:Segmentation
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:prediction
    Select the thresholding method:MCT Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Name the outline image:SecondaryOutlines
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    Retain outlines of the identified secondary objects?:Yes
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EMCleanup:[module_num:13|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
    Prediction image::prediction
    Input image::image
    Input segmentation::Segmentation
    Output segmentation::CleanedSegmentation
    Dark cutoff::0.3
    Minimum object area::30
    Minimum support::0.30
    Minimum border between objects::5
    Outlines name::CleanedOutlines

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:image
    Name the output image:ImageOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SecondaryOutlines
    Select outline color:Red
    Select outlines to display:CleanedOutlines
    Select outline color:Green

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:prediction
    Name the output image:PredictionOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SecondaryOutlines
    Select outline color:Red
    Select outlines to display:CleanedOutlines
    Select outline color:Green

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:CleanedSegmentation
    Name the output image:PredictionMask
    Select the color type:Binary (black & white)
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:PredictionMask
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:TrainPrediction
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    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:ImageOverlay
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:SegmentationPicture
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    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
